PsychoPy2experiment version="2025.1.0"
Settings
  Audio lib = ptb
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Save csv file = True
  Save excel file = True
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 864]
  expName = 8
  keyboardBackend = PsychToolbox
  runMode = 0
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Routines
  Routine Welcome_Screen
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    KeyboardComponent keyWelcome
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent text_Welcome
      letterHeight = 0.05
      pos = (0, -0.05)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Welcome to my musical experiment!

        Press (SPACE) to start.
  Routine EndScreen
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    TextComponent textEnd
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Thanks for participating!
        Press space to leave the experiment!
    KeyboardComponent key_resp_endscreen
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine Trial
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    SoundComponent soundfiles
      forceEndRoutine = False
      saveStartStop = False
      sound [set every repeat] = $musik
      startVal [time (s)] = 0.0
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    SliderComponent slider_sounds
      colorSpace = dkl
      forceEndRoutine = True
      granularity = 1
      labels = ('1', '2' , '3', '4', '5')
      letterHeight = 0.05
      pos = (0, -0.2)
      saveStartStop = False
      size = (0.5, 0.1)
      startVal [time (s)] = 0.0
      storeRatingTime = False
      styles = ['rating']
      ticks = (1,2,3,4,5)
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    TextComponent textsounds
      letterHeight = 0.05
      pos = (0, 0.17)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = How aggressive do you percieve this piece of music? (1=not aggressive,5=very aggressive)
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  Routine Age
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    TextComponent text_Age
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = How old are you? 
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    SliderComponent sliderAge
      colorSpace = dkl
      forceEndRoutine = True
      granularity = 0
      labels = ('15-25', '25-35', '35-45', '45-')
      letterHeight = 0.05
      pos = (0, -0.2)
      saveStartStop = False
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      storeRatingTime = False
      styles = ['rating']
      ticks = (1, 2, 3,4)
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  Routine Gender
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    TextComponent text_Gender
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Please select your gender. Press 'f' for female and 'm' for male. 
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    KeyboardComponent key_respGender
      allowedKeys = 'f','m'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = all keys
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  Routine musicalpreference_heavymetal_
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    TextComponent text_PreferenceHeavymetal
      letterHeight = 0.05
      pos = (0, 0.17)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = On a scale from 1-5, how much do you like the genre Heavy-Metal? (1=strongly disslike, 5=strongly like)
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    SliderComponent slider_HeavymetalPreference
      colorSpace = dkl
      forceEndRoutine = True
      granularity = 1
      labels = ('1', '2', '3', '4', '5')
      letterHeight = 0.05
      pos = (0, -0.2)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      storeRatingTime = False
      styles = ['rating']
      ticks = (1, 2, 3, 4, 5)
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  Routine musicalpreference_pop
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    TextComponent text_PreferencePop
      letterHeight = 0.05
      pos = [0,0.17]
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = On a scale from 1-5, how much do you like the genre Popular Music? (1=strongly disslike, 5=strongly like)
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    SliderComponent sliderPopPreference
      colorSpace = dkl
      forceEndRoutine = True
      granularity = 1
      labels = ('1', '2', '3', '4', '5')
      letterHeight = 0.05
      pos = (0, -0.2)
      saveStartStop = False
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      storeRatingTime = False
      styles = ['rating']
      ticks = (1, 2, 3, 4, 5)
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  Routine musicalpreference_classic
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    TextComponent text_PreferenceClassic
      letterHeight = 0.05
      pos = (0, 0.17)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = On a scale from 1-5, how much do you like the genre Classical Music? (1=strongly disslike, 5=strongly like)
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    SliderComponent sliderClassicPreference
      colorSpace = dkl
      forceEndRoutine = True
      granularity = 1
      labels = ('1', '2', '3', '4', '5')
      letterHeight = 0.05
      pos = (0, -0.2)
      saveStartStop = False
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      storeHistory = True
      storeRatingTime = False
      styles = ['rating']
      ticks = 1, 2, 3, 4, 5
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  Routine Second_Welcome_Screen
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    TextComponent Second_Welcome_Text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Now you will hear some sound examples.

        Please listen to the whole sound examples before deciding on your answer!

        Press (SPACE) to continue.
    KeyboardComponent key_resp_welcome2
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  Routine Welcome_Screen
  Routine Second_Welcome_Screen
  Routine Age
  Routine Gender
  LoopInitiator trials_sounds loopType="TrialHandler"
    conditionsFile = inidpendent v.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('musik', 'musik/hm1.wav'), ('AV', 'happy'), ('Genre', 'Heavymetal')]),
      OrderedDict([('musik', 'musik/hm2.wav'), ('AV', 'aggressive'), ('Genre', 'Heavymetal')]),
      OrderedDict([('musik', 'musik/hm3.wav'), ('AV', 'aggressive'), ('Genre', 'Heavymetal')]),
      OrderedDict([('musik', 'musik/hm4.wav'), ('AV', 'aggressive'), ('Genre', 'Heavymetal')]),
      OrderedDict([('musik', 'musik/hm5.wav'), ('AV', 'aggressive'), ('Genre', 'Heavymetal')]),
      OrderedDict([('musik', 'musik/hm6.wav'), ('AV', 'aggressive'), ('Genre', 'Heavymetal')]),
      OrderedDict([('musik', 'musik/hm7.wav'), ('AV', 'aggressive'), ('Genre', 'Heavymetal')]),
      OrderedDict([('musik', 'musik/hm8.wav'), ('AV', 'aggressive'), ('Genre', 'Heavymetal')]),
      OrderedDict([('musik', 'musik/hm9.wav'), ('AV', 'aggressive'), ('Genre', 'Heavymetal')]),
      OrderedDict([('musik', 'musik/hm10.wav'), ('AV', 'aggressive'), ('Genre', 'Heavymetal')]),
      OrderedDict([('musik', 'musik/c1.wav'), ('AV', 'happy'), ('Genre', 'Classic')]),
      OrderedDict([('musik', 'musik/c2.wav'), ('AV', 'happy'), ('Genre', 'Classic')]),
      OrderedDict([('musik', 'musik/c3.wav'), ('AV', 'happy'), ('Genre', 'Classic')]),
      OrderedDict([('musik', 'musik/c4.wav'), ('AV', 'happy'), ('Genre', 'Classic')]),
      OrderedDict([('musik', 'musik/c5.wav'), ('AV', 'happy'), ('Genre', 'Classic')]),
      OrderedDict([('musik', 'musik/c11.wav'), ('AV', 'aggressive'), ('Genre', 'Classic')]),
      OrderedDict([('musik', 'musik/c7.wav'), ('AV', 'happy'), ('Genre', 'Classic')])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
    Routine Trial
  LoopTerminator trials_sounds
  Routine musicalpreference_pop
  Routine musicalpreference_classic
  Routine musicalpreference_heavymetal_
  Routine EndScreen
